PsychoPy2experiment version="2022.2.5"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [936, 864]
  expName = ASSR3
  keyboardBackend = ioHub
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Routines
  Routine Intro
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome to the experiment.
        Participant: Sit upright, try to relax, and please avoid during data collection:
        - unnecessary movements
        - talking

        Tester:
        - set volume to 40
        - on labrecorder set: study root, task, participant name, session, run, device, electrode layout, psychopy experiment version
        - initial impedance test
        press space to continue
    CodeComponent code
      Code Type = Auto->JS
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      Before Experiment:
        from pylsl import StreamInfo, StreamOutlet
        from psychopy import event
        import time
      Begin Experiment:
        #event ids
        startRest = 1
        startASSR = 2
        artifact = 3

        info = StreamInfo(name='LSL_Markers', type='Markers', channel_count=1,
                          channel_format='int32', source_id='Psychopy Markers')
        # Initialize the stream.
        outlet = StreamOutlet(info)
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine ASSR
    SoundComponent ModulatedTone
      sound = 1kHzAmplitudeModulated40Hz.wav
      startVal [time (s)] = 10
      stopVal [duration (s)] = 60
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    PolygonComponent Cross
      fillColor = white
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 70
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    CodeComponent code_2
      Code Type = Py
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      Begin Routine:
        print('start')
        flag_start = True
        outlet.push_sample(x=[startRest])
      Each Frame:
        if ModulatedTone.status == STARTED and flag_start == True:
            print('start')
            flag_start = False
            outlet.push_sample(x=[startASSR])

        keys = event.getKeys()
        if 'a' in keys:  # Change 'space' to the actual button you want to use
            outlet.push_sample(x=[artifact])  # Push the sample to the LSL stream
            print('artifact')
    TextComponent text_3
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (s)] = 10
      text = Rest
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  Routine Outro
    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1000.0
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      text:
        This section is over. Todo:
        -check final impedance
        - upload collected data to drive
        - upload device config file to drive
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Impedance_check
    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = 5 second break
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Flow
  Routine Intro
  LoopInitiator trials loopType="TrialHandler"
    loopType = sequential
    nReps = 3
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    LoopInitiator trials_2 loopType="TrialHandler"
      loopType = sequential
      nReps = 5
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      Routine ASSR
    LoopTerminator trials_2
    Routine Impedance_check
  LoopTerminator trials
  Routine Outro
