PsychoPy2experiment version="2022.2.5"
Settings
  Audio latency priority = 4
  Audio lib = ptb
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [900, 500]
  expName = Oddball_task
  keyboardBackend = ioHub
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Routines
  Routine Instructions
    TextComponent instructions
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = In this task you will be required to categorise the presented stimuli depending on the tone. Press 's' for the standard tone (1000 Hz) and 't' for the target tone (1200 Hz). This is a practice trail and feedback will be provided. Press 'space' to continue. Press 'esc' to exit the experiment.
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    KeyboardComponent key_resp_1
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Py
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      Before Experiment:
        from pylsl import StreamInfo, StreamOutlet
        import time
      Begin Experiment:
        #event ids
        start = 0
        end = 1

        info = StreamInfo(name='LSL_Markers', type='Markers', channel_count=1,
                          channel_format='int32', source_id='Psychopy Markers')
        # Initialize the stream.
        outlet = StreamOutlet(info)
  Routine Feedback
    CodeComponent feedback_code
      Code Type = Py
      Begin Routine:
        if response.corr:#stored on last run routine
          msg="Correct"
        else:
          msg="Incorrect"
    TextComponent feedback_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $msg
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  Routine Trial
    TextComponent fixation
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = +
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    ImageComponent image
      disabled = True
      image [set every repeat] = $picture
      pos [set every repeat] = $location
      size = (0.2, 0.2)
      startVal [time (s)] = 1
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    KeyboardComponent response
      allowedKeys = 's','t'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 1.5
      storeCorrect = True
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    SoundComponent sound_1
      sound [set every repeat] = $tone
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 0.5
      volume = 0.8
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        flag_start = True
        flag_end = True
      Each Frame:
        if sound_1.status == STARTED and flag_start == True:
            print('start')
            flag_start = False
            outlet.push_sample(x=[start])

        if sound_1.status == FINISHED and flag_end == True:
            print('end')
            flag_end = False
            outlet.push_sample(x=[end])

            print('****')
  Routine Instructions_3
    TextComponent instructions_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        This is the end of practice trials and start of experimental trials. Feedback will not be provided anymore.
        Press 's' for the standard tone (1000 Hz) and 't' for the target tone (1200 Hz). Press 'space' to continue.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine End
    TextComponent thank_you
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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      text:
        This is the end of the experiment.

        Thank you for your time.
    KeyboardComponent exit_exp
      allowedKeys = 'e'
      forceEndRoutine = True
      startVal [time (s)] = 3
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Flow
  Routine Instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = aud_conditions.xlsx
    loopType = fullRandom
    nReps = 1
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    conditions:
      [{'trial': 'standard', 'file': "soundFiles/1000Hz_-3dBFS_3s_44.1kHz.wav'", 'corrAns': 's', 'tone': 1000},
      {'trial': 'standard', 'file': "soundFiles/1000Hz_-3dBFS_3s_44.1kHz.wav'", 'corrAns': 's', 'tone': 1000},
      {'trial': 'standard', 'file': "soundFiles/1000Hz_-3dBFS_3s_44.1kHz.wav'", 'corrAns': 's', 'tone': 1000},
      {'trial': 'target', 'file': "soundFiles/1200Hz_-3dBFS_3s_44.1kHz.wav'", 'corrAns': 't', 'tone': 1200}]
    Routine Trial
    Routine Feedback
  LoopTerminator trials
  Routine Instructions_3
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = aud_conditions.xlsx
    loopType = fullRandom
    nReps = 10
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    conditions:
      [{'trial': 'standard', 'file': "soundFiles/1000Hz_-3dBFS_3s_44.1kHz.wav'", 'corrAns': 's', 'tone': 1000},
      {'trial': 'standard', 'file': "soundFiles/1000Hz_-3dBFS_3s_44.1kHz.wav'", 'corrAns': 's', 'tone': 1000},
      {'trial': 'standard', 'file': "soundFiles/1000Hz_-3dBFS_3s_44.1kHz.wav'", 'corrAns': 's', 'tone': 1000},
      {'trial': 'target', 'file': "soundFiles/1200Hz_-3dBFS_3s_44.1kHz.wav'", 'corrAns': 't', 'tone': 1200}]
    Routine Trial
  LoopTerminator trials_2
  Routine End
